PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'perm_number': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['survey_consent.json', 'survey_information.json', 'instruction1.jpg', 'instruction2.jpg', 'survey_debriefing.json', 'survey_demographic.json', 'I.wav', 'N.wav', 'O.wav', 'T.wav', 'Beep.wav', 'Instruction.jpg', 'left.jpg', 'origin.jpg', 'right.jpg', 'up.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  expName = simonGame
  keyboardBackend = ioHub
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Routines
  Routine welcomePage
    CodeComponent generateSeqMat_Grammar
      Code Type = Both
      Before Experiment:
        import numpy as np
        import itertools
        import random

        nWord = 7
        nTrial = 13
        nPrac = 3
        nEle = nWord * 3

        dist_letter2center = 0.15

        ### set group index: 0 / 1
        groupIdx = np.random.randint(low=0, high=2)
        #groupIdx = 1

        ### specify legal words: in order T, I, N, O
        gram_legal = [[0, 1, 2], [0, 3, 2], [2, 1, 0], [2, 3, 0]]
        gram_illegal = [[1, 2, 3], [3, 2, 1], [1, 0, 3], [3, 0, 1]]
        if groupIdx == 0:
            currGram = gram_legal
        else:
            currGram = gram_illegal



        ### set seqMat
        seqMat = []
        for iTrial in range(nTrial):
            toneSeqCollector = []
            wordSeq = []
            for iWord in range(nWord):
                choose_from = [0, 1, 2, 3]
                if iWord == 0:
                    curr_idx = random.choice(choose_from)
                else:
                    choose_from.remove(curr_idx)
                    curr_idx = random.choice(choose_from)
                wordSeq.append(curr_idx)

            for iWord in range(nWord):
                word_id = wordSeq[iWord]
                toneSeqCollector = toneSeqCollector + currGram[word_id]
            seqMat.append(toneSeqCollector)


        ### set practice mat
        for iPrac in range(nPrac):
            curr_list = []

            for iEle in range(nEle):
                choose_from = [0, 1, 2, 3]
                if iEle == 0:
                    curr_idx = random.choice(choose_from)
                else:
                    choose_from.remove(curr_idx)
                    curr_idx = random.choice(choose_from)
                curr_list.append(curr_idx)

            seqMat[iPrac] = curr_list
      Before JS Experiment:
        const nWord = 7;
        const nTrial = 13;
        const nPrac = 3;
        const nEle = nWord * 3;

        const dist_letter2center = 0.15;

        // set group index: 0/1
        const groupIdx = Math.floor(Math.random() * 2);

        // specify legal words: in order T, I, N, O
        const gram_legal = [[0, 1, 2], [0, 3, 2], [2, 1, 0], [2, 3, 0]];
        const gram_illegal = [[1, 2, 3], [3, 2, 1], [1, 0, 3], [3, 0, 1]];
        let currGram;
        if (groupIdx == 0){
            currGram = gram_legal;
        }else{
            currGram = gram_illegal;
        }

        // set seqMat
        const seqMat = [];
        for (let iTrial = 0; iTrial < nTrial; iTrial++) {
          let toneSeqCollector = [];
          let wordSeq = [];

          for (let iWord = 0; iWord < nWord; iWord++) {
            var choose_from = [0, 1, 2, 3];
            var curr_idx;

            if (iWord === 0) {
              curr_idx = choose_from[Math.floor(Math.random() * choose_from.length)];
              console.log(curr_idx)
              console.log(choose_from)
            } else {
              choose_from.splice(util.index(choose_from, curr_idx), 1);
              curr_idx = choose_from[Math.floor(Math.random() * choose_from.length)];
            }

            wordSeq.push(curr_idx);
          }

          for (let iWord = 0; iWord < nWord; iWord++) {
            var word_id = wordSeq[iWord];
            toneSeqCollector = toneSeqCollector.concat(currGram[word_id]);
          }

          seqMat.push(toneSeqCollector);
        }

        // set practice mat
        for (let iPrac = 0; iPrac < nPrac; iPrac++) {
          let curr_list = [];

          for (let iEle = 0; iEle < nEle; iEle++) {
            var choose_from = [0, 1, 2, 3];
            var curr_idx;

            if (iEle === 0) {
              curr_idx = choose_from[Math.floor(Math.random() * choose_from.length)];
            } else {
              choose_from.splice(util.index(choose_from, curr_idx), 1);
              curr_idx = choose_from[Math.floor(Math.random() * choose_from.length)];
            }

            curr_list.push(curr_idx);
          }

          seqMat[iPrac] = curr_list;
        }


        // set perm_idx
        function permutations(arr, size) {
          const results = [];

          function permute(arr, size, current = []) {
            if (current.length === size) {
              results.push([...current]);
            } else {
              for (let i = 0; i < arr.length; i++) {
                if (!current.includes(arr[i])) {
                  current.push(arr[i]);
                  permute(arr, size, current);
                  current.pop();
                }
              }
            }
          }

          permute(arr, size);
          return results;
        }

        // var text_perm_idx = parseInt(expInfo['perm_number']) - 1; // parseInt -> int?
        var text_perm_idx = Math.floor(Math.random() * 24);
        console.log(text_perm_idx)

        // set mapping rules
        let text_origin = ['T', 'I', 'N', 'O'];
        let text_list_all = permutations(text_origin, 4);
        let text_list = Array.from(text_list_all[text_perm_idx]);

        // decide participants' group and mapping index
        var idx_to_pic = ['up.jpg','right.jpg','down.jpg','left.jpg'];
        var idx_to_key = ['up','right','down','left'];
        var idx_to_voice = text_list.map(Letter => Letter + '.wav');

        console.log(idx_to_pic)
        console.log(idx_to_key)
        console.log(idx_to_voice)
        console.log(groupIdx)
      Begin Experiment:
        text_perm_idx = int(expInfo['perm_number']) - 1

        ### set mapping rules
        text_origin = ['T', 'I', 'N', 'O']
        text_list_all = list(itertools.permutations(text_origin, 4))
        text_list = list(text_list_all[text_perm_idx])

        # decide participants' group and mapping index
        idx_to_pic = ['up.jpg','right.jpg','down.jpg','left.jpg']
        idx_to_key = ['up','right','down','left']
        idx_to_voice = [Letter + '.wav' for Letter in text_list]
      Begin JS Experiment:
        if( /Android|webOS|iPhone|iPad|iPod|BlackBerry|IEMobile|Opera Mini/i.test(navigator.userAgent) ) {
          quitPsychoJS('Mobile device detected. Goodbye!', false)
        }
      Begin JS Routine:
        document.body.style.cursor='none';
      End JS Routine:
        psychoJS.experiment.addData('seqMat',seqMat);
        psychoJS.experiment.addData('groupIdx',groupIdx);
        psychoJS.experiment.addData('text_perm_idx',text_perm_idx);
      End Routine:
        thisExp.addData('seqMat',seqMat)
        thisExp.addData('groupIdx',groupIdx)
        thisExp.addData('text_perm_idx',text_perm_idx)
    ImageComponent img_instruction
      image = instruction1.jpg
      size = (1.5,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endPage
    TextComponent msgEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Experiment ends.

        Thank you for your participation!
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
  Routine trialNumber
    CodeComponent currSeqAll
      Code Type = Auto->JS
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      Begin Routine:
        trialNo = block.thisRepN + 1

        if trialNo <= 3:
            msg_thisTrialNum = 'Practice No.' + str(trialNo)
        elif trialNo > 3:
            msg_thisTrialNum = 'Trial No.' + str(trialNo-3)
    TextComponent msgTrialNum
      letterHeight = 0.05
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $msg_thisTrialNum
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  Routine stimPresentation
    ImageComponent picStim
      image [set during: prepare_stim.ISI_before_stim] = $currPic
      size = (1.5,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    TextComponent msgPlaying
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = Playing...
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    SoundComponent snd_voice
      sound [set during: prepare_stim.ISI_before_stim] = $currVoice
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    TextComponent letter_up_3
      letterHeight = 0.05
      pos = (0, dist_letter2center)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = $text_list[0]
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    TextComponent letter_right_2
      letterHeight = 0.05
      pos = (dist_letter2center,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = $text_list[1]
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    TextComponent letter_down_3
      letterHeight = 0.05
      pos = (0, -1*dist_letter2center)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = $text_list[2]
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    TextComponent letter_left_3
      letterHeight = 0.05
      pos = (-1*dist_letter2center,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = $text_list[3]
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  Routine blank
    ImageComponent picBlank
      image = origin.jpg
      size = (1.5,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    TextComponent letter_up
      letterHeight = 0.05
      pos = (0, dist_letter2center)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = $text_list[0]
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    TextComponent letter_right
      letterHeight = 0.05
      pos = (dist_letter2center,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = $text_list[1]
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    TextComponent letter_down
      letterHeight = 0.05
      pos = (0, -1*dist_letter2center)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = $text_list[2]
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    TextComponent letter_left
      letterHeight = 0.05
      pos = (-1*dist_letter2center,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = $text_list[3]
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  Routine keyResponse
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        currCorIdx_origin = currSeqAll[aTry_resp.thisRepN]
        currCorIdx = text_list.index(text_origin[currCorIdx_origin])
        currCorPress = idx_to_key[currCorIdx]
    ImageComponent picFiller
      image = origin.jpg
      size = (1.5,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent subjResp
      allowedKeys = 'right','left','up','down'
      correctAns = $currCorPress
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent msgYourTurn
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Your turn
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    TextComponent letter_up_4
      letterHeight = 0.05
      pos = (0, dist_letter2center)
      startVal [time (s)] = 0.0
      text = $text_list[0]
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    TextComponent letter_right_4
      letterHeight = 0.05
      pos = (dist_letter2center,0)
      startVal [time (s)] = 0.0
      text = $text_list[1]
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    TextComponent letter_down_4
      letterHeight = 0.05
      pos = (0, -1*dist_letter2center)
      startVal [time (s)] = 0.0
      text = $text_list[2]
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    TextComponent letter_left_4
      letterHeight = 0.05
      pos = (-1*dist_letter2center,0)
      startVal [time (s)] = 0.0
      text = $text_list[3]
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  Routine keyPressEffect
    ImageComponent picPressedKey
      image [set during: before_effect.ISI_before_effect] = $picCurrPressedKey
      size = (1.5,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    TextComponent msgYourTurn_2
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      text = Your turn
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    SoundComponent snd_beep_effect
      sound [set during: before_effect.ISI_before_effect] = $voiceCurrPressedKey
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    TextComponent letter_up_6
      letterHeight = 0.05
      pos = (0, dist_letter2center)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = $text_list[0]
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    TextComponent letter_right_6
      letterHeight = 0.05
      pos = (dist_letter2center,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = $text_list[1]
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    TextComponent letter_down_6
      letterHeight = 0.05
      pos = (0, -1*dist_letter2center)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = $text_list[2]
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    TextComponent letter_left_6
      letterHeight = 0.05
      pos = (-1*dist_letter2center,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = $text_list[3]
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  Routine add_numEle
    CodeComponent numElePlus1
      Code Type = Auto->JS
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      Begin Routine:
        numEle += 1
        if break_to_next_trial == 1:
            aTry_thisTime.finished = True;
  Routine prepareSeq
    CodeComponent codePrepareSeq
      Code Type = Both
      Begin JS Routine:
        console.log(seqMat)
        currSeqAll = seqMat[block.thisRepN];
        numEle = 1;
        break_to_next_trial = 0;
      Begin Routine:
        currSeqAll = seqMat[block.thisRepN]
        numEle = 1
        break_to_next_trial = 0
  Routine prepare_stim
    CodeComponent genStim
      Code Type = Both
      Begin JS Routine:
        // get current idx list from currSeqAll
        currIdx_origin = currSeqAll[aTry_stim.thisRepN];

        // convert to new seq idx
        let intend_letter = text_origin[currIdx_origin];
        let currIdx = util.index(text_list, intend_letter);

        currPic = idx_to_pic[currIdx];
        currVoice = idx_to_voice[currIdx];
      Begin Routine:
        # get current idx list from currSeqAll
        currIdx_origin = currSeqAll[aTry_stim.thisRepN]

        # convert to new seq idx
        intend_letter = text_origin[currIdx_origin]
        currIdx = text_list.index(intend_letter)

        currPic = idx_to_pic[currIdx]
        currVoice = idx_to_voice[currIdx]
    ImageComponent blankBetweenStim_2
      image = origin.jpg
      size = (1.5,1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
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    TextComponent msgPlaying_2
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = Playing...
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    StaticComponent ISI_before_stim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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    TextComponent letter_up_2
      letterHeight = 0.05
      pos = (0, dist_letter2center)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = $text_list[0]
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    TextComponent letter_right_3
      letterHeight = 0.05
      pos = (dist_letter2center,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = $text_list[1]
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    TextComponent letter_down_2
      letterHeight = 0.05
      pos = (0, -1*dist_letter2center)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = $text_list[2]
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    TextComponent letter_left_2
      letterHeight = 0.05
      pos = (-1*dist_letter2center,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = $text_list[3]
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  Routine feedback_and_rest
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if trialNo == nTrial:
            continueRoutine=False

        if trialNo == 3:
            next_trial_msg = 'You have now finished the practice trials and are ready to start the formal experiment! Press space when you are ready to begin.'
            next_trial_color = [1, 0, 0]
        else:
            next_trial_msg = 'Please press space to start next trial.'
            next_trial_color = [1, 1, 1]
    TextComponent msg_rest
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text [set every frame] = $'Please rest for at least ' + str(11 - round(t)) + ' more seconds.'
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    TextComponent msg_end_rest
      color [set every repeat] = $next_trial_color
      letterHeight = 0.04
      startVal [time (s)] = 10.
      text [set every repeat] = $next_trial_msg
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    KeyboardComponent key_end_rest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 10.
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  Routine feedback
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if break_to_next_trial == 1:
            msg_feedback = 'Error!'
            color_feedback = [1,0,0]
        else:
            msg_feedback = 'Well Done!'
            color_feedback = [0,1,0]
    TextComponent msgFeedback_2
      color [set every repeat] = $color_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $msg_feedback
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  Routine before_effect
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        idxCurrPressed = idx_to_key.index(subjResp.keys)
        picCurrPressedKey = idx_to_pic[idxCurrPressed]
        voiceCurrPressedKey = idx_to_voice[idxCurrPressed]
      End Routine:
        if subjResp.corr == 0:
            break_to_next_trial = 1
            aTry_resp.finished = True
    ImageComponent picFiller_2
      image = origin.jpg
      size = (1.5,1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
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    TextComponent msgYourTurn_3
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = Your turn
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    StaticComponent ISI_before_effect
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    TextComponent letter_up_5
      letterHeight = 0.05
      pos = (0, dist_letter2center)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = $text_list[0]
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    TextComponent letter_right_5
      letterHeight = 0.05
      pos = (dist_letter2center,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = $text_list[1]
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    TextComponent letter_down_5
      letterHeight = 0.05
      pos = (0, -1*dist_letter2center)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = $text_list[2]
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    TextComponent letter_left_5
      letterHeight = 0.05
      pos = (-1*dist_letter2center,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = $text_list[3]
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  Routine welcomePage2
    KeyboardComponent keyStart_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent img_instruction_2
      image = instruction2.jpg
      size = (1.5,1)
      startVal [time (s)] = 0.0
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  PavloviaSurveyRoutine consent
    surveyJson = survey_consent.json
    surveyType = json
  PavloviaSurveyRoutine debriefing
    surveyId = 38707708-a16c-4cf7-be8e-ea820ac76b3c
    surveyJson = survey_debriefing.json
    surveyType = json
  PavloviaSurveyRoutine demographic
    surveyId = f821f154-af74-4e25-abbc-5c6d8cdf57d2
    surveyJson = survey_demographic.json
    surveyType = json
  PavloviaSurveyRoutine information
    surveyJson = survey_information.json
    surveyType = json
Flow
  PavloviaSurveyRoutine information
  PavloviaSurveyRoutine consent
  PavloviaSurveyRoutine demographic
  Routine welcomePage
  Routine welcomePage2
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = nTrial
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    Routine trialNumber
    Routine prepareSeq
    LoopInitiator aTry_thisTime loopType="TrialHandler"
      loopType = random
      nReps = nEle
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      Routine blank
      LoopInitiator aTry_stim loopType="TrialHandler"
        loopType = sequential
        nReps = numEle
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        Routine prepare_stim
        Routine stimPresentation
      LoopTerminator aTry_stim
      LoopInitiator aTry_resp loopType="TrialHandler"
        loopType = sequential
        nReps = numEle
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        Routine keyResponse
        Routine before_effect
        Routine keyPressEffect
      LoopTerminator aTry_resp
      Routine add_numEle
    LoopTerminator aTry_thisTime
    Routine feedback
    Routine feedback_and_rest
  LoopTerminator block
  Routine endPage
  PavloviaSurveyRoutine debriefing
